PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = para
  keyboardBackend = ioHub
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Routines
  Routine pre
    TextComponent text_pre_condition
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        $(f"""
        The following is an {n}-back test.

        {f'TARGET: --> {k} <-- ' if k!=0 else ""}

        Press <space> to continue...
        """)
    KeyboardComponent key_resp_pre
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        outlet.push_sample([f"B{n}/{k}"])
  Routine trial
    TextComponent text_x
      letterHeight = 0.3
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $x
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    TextComponent text_condition
      letterHeight = 0.05
      pos = (0, .85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $f"Letter: {x}          target: {tg}"
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    CodeComponent code_trigger
      Code Type = Py
      Begin Routine:
        outlet.push_sample([f"{tg}/{x}"])
    TextComponent text_corrects
      letterHeight = 0.05
      pos = (.8, .8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent text_incorrects
      letterHeight = 0.05
      pos = (-.8, .8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_trial
      allowedKeys = 'f','j','space'
      correctAns = $"j" if tg == 1 else "f"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    TextComponent text_blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine intro
    TextComponent text_intro
      letterHeight = 0.15
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Press <space> to continue...
    CodeComponent code_init
      Code Type = Py
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet

        # Setup the LSL stream
        info = StreamInfo(name='PsychoPyNBack', type='Markers', channel_count=1,
                          channel_format='string', source_id='PsychopyMarkersID42')
        # Initialize the LSL stream.
        outlet = StreamOutlet(info)
      Begin Experiment:
        score = [0,0] # Correct/incorrects
    KeyboardComponent key_resp_intro
      allowedKeys = 'f','j','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = End!
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  Routine nothing
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine fix
    TextComponent text_cross
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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Flow
  Routine intro
  LoopInitiator tasks loopType="TrialHandler"
    conditionsFile = lists\tasks.csv
    loopType = random
    nReps = 1
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    Routine pre
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $f"lists\\trials\\{trial_list}"
      loopType = sequential
      nReps = 1
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      Routine fix
      Routine trial
    LoopTerminator trials
  LoopTerminator tasks
  Routine end
